PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = N-back_test
  keyboardBackend = ioHub
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Routines
  Routine trial1
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine routine1
    PolygonComponent fixation1
      fillColor = white
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine instr2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulation! you have finished the first round of the experiment.

        This is the 2-back round. Press the 'SPACE' key if you observe that the alternate previous letter was the same as the current one. Do not press any key if the letter was not repeated.

        The first 10 trials are for practice.

        Press SPACE to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
    PolygonComponent fixation2
      fillColor = white
      shape = cross
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine routine2
    PolygonComponent fixation3
      fillColor = white
      shape = cross
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine n_1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! The experiment begins now.

        These are n-1 trials, and this round will consist of 50 trials. Further instructions will be given later.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine n_2
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! The experiment begins now.

        These are n-2 trials, and this round consists of 50 trials.  Further instructions will be given later.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr3
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Congratulations! You have finished the second round of the experiment.

        This is the 3-back round. Press the 'SPACE' key if you observe that the letter was the same as two trials ago. Do not press any key if the letter was not repeated.

        The first 10 trials are for practice.

        Press SPACE to begin.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial3
    PolygonComponent fixation4
      fillColor = white
      shape = cross
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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  Routine routine3
    PolygonComponent fixation5
      fillColor = white
      shape = cross
      size = (20,20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $letter
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      storeCorrect = True
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  Routine n_3
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! The experiment begins now.

        These are n-3 trials, and this round consists of 50 trials.  Further instructions will be given later.

        Press SPACEBAR to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Thank you for your participation in the experiment!
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  Routine instr1
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello and welcome to this experiment!

        This is the 1-back test. Press the 'SPACE' key if you observe that the immideatly previous letter was the same as the current one. Do not press any key if the letter was not repeated.

        The first 10 trials are for practice.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = contrial1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'X'), ('corrAns', None)]),
      OrderedDict([('letter', 'Y'), ('corrAns', None)]),
      OrderedDict([('letter', 'Y'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'R'), ('corrAns', None)]),
      OrderedDict([('letter', 'O'), ('corrAns', None)]),
      OrderedDict([('letter', 'T'), ('corrAns', None)]),
      OrderedDict([('letter', 'T'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'Q'), ('corrAns', None)]),
      OrderedDict([('letter', 'Q'), ('corrAns', 'space')])]
    Routine trial1
  LoopTerminator trials
  Routine n_1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = con1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'I'), ('corrAns', None)]),
      OrderedDict([('letter', 'P'), ('corrAns', None)]),
      OrderedDict([('letter', 'O'), ('corrAns', None)]),
      OrderedDict([('letter', 'R'), ('corrAns', None)]),
      OrderedDict([('letter', 'R'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'W'), ('corrAns', None)]),
      OrderedDict([('letter', 'T'), ('corrAns', None)]),
      OrderedDict([('letter', 'T'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'Q'), ('corrAns', None)]),
      OrderedDict([('letter', 'Q'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'R'), ('corrAns', None)]),
      OrderedDict([('letter', 'K'), ('corrAns', None)]),
      OrderedDict([('letter', 'K'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'L'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'Y'), ('corrAns', None)]),
      OrderedDict([('letter', 'X'), ('corrAns', None)]),
      OrderedDict([('letter', 'W'), ('corrAns', None)]),
      OrderedDict([('letter', 'R'), ('corrAns', None)]),
      OrderedDict([('letter', 'M'), ('corrAns', None)]),
      OrderedDict([('letter', 'M'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'R'), ('corrAns', None)]),
      OrderedDict([('letter', 'U'), ('corrAns', None)]),
      OrderedDict([('letter', 'U'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'A'), ('corrAns', None)])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
    Routine routine1
  LoopTerminator trials_2
  Routine instr2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = contrial2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'F'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'F'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', 'space')])]
    Routine trial2
  LoopTerminator trials_3
  Routine n_2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = con2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'J'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'I'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'G'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'F'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'F'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', None)]),
      OrderedDict([('letter', 'J'), ('corrAns', None)]),
      OrderedDict([('letter', 'F'), ('corrAns', None)]),
      OrderedDict([('letter', 'J'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'I'), ('corrAns', None)])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
    Routine routine2
  LoopTerminator trials_4
  Routine instr3
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = contrial3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'F'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', 'space')])]
    Routine trial3
  LoopTerminator trials_5
  Routine n_3
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = con3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'G'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'I'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'D'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', None)]),
      OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'G'), ('corrAns', None)]),
      OrderedDict([('letter', 'D'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'H'), ('corrAns', None)]),
      OrderedDict([('letter', 'I'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'H'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'I'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'I'), ('corrAns', None)]),
      OrderedDict([('letter', 'C'), ('corrAns', None)]),
      OrderedDict([('letter', 'A'), ('corrAns', None)]),
      OrderedDict([('letter', 'I'), ('corrAns', 'space')]),
      OrderedDict([('letter', 'B'), ('corrAns', None)]),
      OrderedDict([('letter', 'G'), ('corrAns', None)]),
      OrderedDict([('letter', 'E'), ('corrAns', None)]),
      OrderedDict([('letter', 'B'), ('corrAns', 'space')])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
    Routine routine3
  LoopTerminator trials_6
  Routine thanks
